// dLGN interneuron model
// PARAMETERIZATION P1
// Geir Halnes, Norwegian University of Life Sciences, June 2011

// From fitting of passive properties:
rall = 113 	//most people find something like this, axial resistivity
cap = 1.1	//membrane capacitance
Rm = 22000	//membrane resistance
Vrest = -63	//resting potential
Epas = -67	//

// Channel densities & shifts (for additional channels see May_dends.hoc)
gna =  0.09	//max. Na conductance in soma
nash = - 52.6	//
gkdr = 0.37	//max. Kdr conductance in soma
kdrsh = -51.2	//
gahp = 6.4e-5	//max. Iahp conductance in soma
gcat=1.17e-5	//max. CaT-conductance in soma
gcal=0.0009	//max. CaL-conductance in soma
ghbar=0.00011	//
catau = 50	//
gcanbar = 2e-8	//max. Ican conductance in soma
